OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.6.0)

Keyboard stimulator => #0
  Filename = ${Path_Data}/plugins/stimulation/simple-keyboard-to-stimulations.txt
Acquisition client => #1
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#1.Signal stream -> Channel Selector "1:8" => #2
  Channel List = 1:8
  Action = Select
  Channel Matching Method = Smart
-> Temporal Filter => #3
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 12
Data=#3, Stimulations=#0 -> Signal display
  Display Mode = Scroll
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Data=#2, Stimulations=#0 -> Signal display
  Display Mode = Scroll
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Lua Stimulator => #6
  Lua Script = C:/Users/roenz/Documents/LuaStimulations/NeurotechTrialExperimentControlNilsRandomized.lua.txt
-> Display cue image
  Display images in full screen = false
  Scale images to fit = false
  Clear screen Stimulation = OVTK_StimulationId_ExperimentStop
  Cue Image 1 = C:/Users/roenz/Documents/LuaStimulations/control and moderate condition.png
  Stimulation 1 = OVTK_StimulationId_ExperimentStart
  Cue Image 2 = C:/Users/roenz/Documents/LuaStimulations/white blank screen.png
  Stimulation 2 = OVTK_StimulationId_Label_02
#6 -> Stimulation Filter "Beep"
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Beep
  Stimulation range end = OVTK_StimulationId_Beep
-> Sound Player
  PLAY trigger = OVTK_StimulationId_Label_00
  STOP trigger = OVTK_StimulationId_Label_01
  File to play = ${Path_Data}/plugins/stimulation/ov_beep.wav
  Loop = false
#6 -> Stimulation listener
  Log level to use = Information
Input stimulations 1=#0, Input stimulations 2=#6 -> Stimulation multiplexer => #11
Input Signal=#2, Input Stimulations=#11 -> Generic stream writer
  Filename = record-[$core{date}-$core{time}].ov
  Use compression = false
