OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.6.0)

Keyboard stimulator => #0
  Filename = ${Path_Data}/plugins/stimulation/simple-keyboard-to-stimulations.txt
Acquisition client => #1
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#1.Signal stream -> Channel Selector "1:8" => #2
  Channel List = 1:8
  Action = Select
  Channel Matching Method = Smart
Lua Stimulator => #3
  Lua Script = C:/Users/jbetm/Desktop/Openvibe Data/NeurotechTrialExperimentUpdated2.lua.txt
  Condition = Control
Input stimulations 1=#0, Input stimulations 2=#3 -> Stimulation multiplexer => #4
Input Signal=#2, Input Stimulations=#4 -> Generic stream writer
  Filename = C:/Users/jbetm/Desktop/Openvibe Data/output
  Use compression = false
#3 -> Display cue image
  Display images in full screen = false
  Scale images to fit = false
  Clear screen Stimulation = OVTK_StimulationId_ExperimentStop
  Cue Image 1 = C:/Users/jbetm/Desktop/Openvibe Data/control.png
  Stimulation 1 = OVTK_StimulationId_ExperimentStart
  Cue Image 2 = C:/Users/jbetm/Desktop/Openvibe Data/blank screen.png
  Stimulation 2 = OVTK_StimulationId_TrialStart
  Cue Image 3 = C:/Users/jbetm/Desktop/Openvibe Data/wait time.png
  Stimulation 3 = OVTK_StimulationId_TrialStop
  Cue Image 4 = C:/Users/jbetm/Desktop/Openvibe Data/end slide-thank you for participating.png
  Stimulation 4 = OVTK_GDF_End_Of_Session
#3 -> Stimulation listener
  Log level to use = Information
#3 -> Sound Player
  PLAY trigger = OVTK_StimulationId_Target
  STOP trigger = OVTK_StimulationId_Label_01
  File to play = C:/Program Files/openvibe-3.6.0-64bit/share/openvibe/plugins/stimulation/ov_beep.wav
  Loop = false
#3 -> Sound Player
  PLAY trigger = OVTK_StimulationId_NonTarget
  STOP trigger = OVTK_StimulationId_Label_01
  File to play = C:/Program Files/openvibe-3.6.0-64bit/share/openvibe/plugins/stimulation/ov_beep.wav
  Loop = false

0x341d3912 Generic stream reader => #10
  Filename = C:/Users/jbetm/Desktop/Openvibe Data/Rayna1
#10.Output Signal -> 0x341d3912 Channel Selector "1:8" => #11
  Channel List = 1:8
  Action = Select
  Channel Matching Method = Smart
Data=#11, Stimulations=#10.Output Stimulations -> 0x341d3912 Signal display
  Display Mode = Scroll
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
