OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.6.0)

Generic stream reader => #0
  Filename = C:/Users/roenz/Desktop/OpenBCI Stuff/Alpha Classifier Data/record-AndyVo-Week3-withStimulations-Raw-Testing-[2025.01.29-17.17.48].ov
#0.Output Signal -> Temporal Filter => #1
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 12
#0.Output Stimulations -> Stimulation Filter => #2
  Default action = Select
  Time range begin = 0
  Time range end = 620
  Action to perform = Reject
  Stimulation range begin = OVTK_StimulationId_Label_00
  Stimulation range end = OVTK_StimulationId_Label_00
Input signal=#1, Input stimulations=#2 -> Stimulation based epoching => #3
  Epoch duration (in sec) = 2.5
  Epoch offset (in sec) = 1
  Stimulation 1 = OVTK_StimulationId_Label_01
  Stimulation 2 = OVTK_StimulationId_Label_09
Input stream 1=#3, Input stream 2=#2 -> Identity => #4
#4.Output stream 1 -> Simple DSP
  Equation = abs(x)
-> Signal average
-> Feature aggregator => #7
Features=#7 -> Classifier processor => #8
  Filename to load configuration from = C:/Users/roenz/Documents/LuaStimulations/my-classifier-MessingAround-1.xml
Targets=#2, Classifier 1=#8.Labels -> Classifier Accuracy Measure 1
Targets=#2, Classification results=#8.Labels -> Confusion Matrix
  Percentages = true
  Sums = true
  Class 1 = OVTK_StimulationId_Label_01
  Class 2 = OVTK_StimulationId_Label_09
-> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false

0x341d3912 Generic stream reader => #12
  Filename = C:/Users/roenz/Desktop/OpenBCI Stuff/Alpha Classifier Data/record-AndyVo-Week3-withStimulations-Raw-Training-[2025.01.29-17.29.23].ov
#12.Output Signal -> 0x341d3912 Temporal Filter => #13
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 12
#12.Output Stimulations -> 0x341d3912 Stimulation Filter => #14
  Default action = Select
  Time range begin = 0
  Time range end = 620
  Action to perform = Reject
  Stimulation range begin = OVTK_StimulationId_Label_00
  Stimulation range end = OVTK_StimulationId_Label_00
-> 0x341d3912 Stream Switching Director => #15
  Lua Script = C:/Users/roenz/Documents/LuaStimulations/LUA-script-for-stream-switching-Edited
  Offset = 0
  Duration = 2
Triggers=#15, Matrix=#13 -> 0x341d3912 Stream Switch => #16
  Default to output 1 = true
  Switch stim for output 1 = OVTK_GDF_Incorrect
  Switch stim for output 2 = OVTK_GDF_Correct
Input stream 1=#16.Output(1), Input stream 2=#14 -> 0x341d3912 Identity => #17
#17.Output stream 1 -> 0x341d3912 Simple DSP
  Equation = abs(x)
-> 0x341d3912 Signal average
-> 0x341d3912 Feature aggregator => #20
Features=#20 -> 0x341d3912 Classifier processor => #21
  Filename to load configuration from = C:/Users/roenz/Documents/LuaStimulations/my-classifier-MessingAround-2.xml
Targets=#14, Classifier 1=#21.Labels -> 0x341d3912 Classifier Accuracy Measure 2

0x341d3912 Stream Switching Director => #23
  Lua Script = C:/Users/roenz/Documents/LuaStimulations/LUA-script-for-stream-switching-Edited
  Offset = 0
  Duration = 1
Triggers=#23 -> 0x341d3912 Stream Switch
  Default to output 1 = true
  Switch stim for output 1 = OVTK_GDF_Incorrect
  Switch stim for output 2 = OVTK_GDF_Correct
