OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.6.0)

0x341d3912 Generic stream reader => #0
  Filename = C:/Users/roenz/Desktop/OpenBCI Stuff/Alpha Classifier Data/record-AndyVo-Week3-withStimulations-Raw-Testing-[2025.01.29-17.17.48].ov
#0.Output Stimulations -> 0x341d3912 Stimulation listener
  Log level to use = Information
#0.Output Signal -> 0x341d3912 Temporal Filter => #2
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 12
Input stream 1=#2, Input stream 2=#0.Output Stimulations -> 0x341d3912 Identity => #3
Input signal=#3.Output stream 1, Input stimulations=#3.Output stream 2 -> 0x341d3912 Stimulation based epoching_closed
  Epoch duration (in sec) = 2
  Epoch offset (in sec) = 0
  Stimulation 1 = OVTK_StimulationId_Label_01
-> 0x341d3912 Simple DSP
  Equation = abs(x)
-> 0x341d3912 Signal average
-> 0x341d3912 Feature aggregator => #7
Input signal=#3.Output stream 1, Input stimulations=#3.Output stream 2 -> 0x341d3912 Stimulation based epoching_open
  Epoch duration (in sec) = 2
  Epoch offset (in sec) = 0
  Stimulation 1 = OVTK_StimulationId_Label_09
-> 0x341d3912 Simple DSP
  Equation = abs(x)
-> 0x341d3912 Signal average
Data=#3.Output stream 1, Stimulations=#3.Output stream 2 -> 0x341d3912 Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
0x341d3912 Clock stimulator => #12
  Interstimulation interval (in sec) = 620
  Stimulation = OVTK_StimulationId_Train
Input stimulations 1=#0.Output Stimulations, Input stimulations 2=#12 -> 0x341d3912 Stimulation multiplexer => #13
0x341d3912 Feature aggregator => #14
Stimulations=#13, Features for class 1=#7, Features for class 2=#14 -> 0x341d3912 Classifier trainer
  Train trigger = OVTK_StimulationId_Train
  Filename to save configuration to = C:/Users/roenz/Documents/LuaStimulations/my-classifier-MessingAround-2.xml
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_09
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Number of partitions for k-fold cross-validation test = 10
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Randomize k-fold cross-validation test data = false
  Balance classes = false
-> 0x341d3912 Player Controller
  Stimulation name = OVTK_StimulationId_Train
  Action to perform = Pause

Generic stream reader => #17
  Filename = C:/Users/roenz/Desktop/OpenBCI Stuff/Alpha Classifier Data/record-AndyVo-Week3-withStimulations-Raw-Training-[2025.01.29-17.29.23].ov
#17.Output Signal -> Temporal Filter => #18
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 12
Input stream 1=#18, Input stream 2=#17.Output Stimulations -> Identity => #19
Input signal=#19.Output stream 1, Input stimulations=#19.Output stream 2 -> Stimulation based epoching_closed
  Epoch duration (in sec) = 2.5
  Epoch offset (in sec) = 1
  Stimulation 1 = OVTK_StimulationId_Label_01
-> Simple DSP
  Equation = abs(x)
-> Signal average
-> Feature aggregator => #23
Input signal=#19.Output stream 1, Input stimulations=#19.Output stream 2 -> Stimulation based epoching_open
  Epoch duration (in sec) = 2.5
  Epoch offset (in sec) = 1
  Stimulation 1 = OVTK_StimulationId_Label_09
-> Simple DSP
  Equation = abs(x)
-> Signal average
-> Feature aggregator => #27
Data=#19.Output stream 1, Stimulations=#19.Output stream 2 -> 0x341d3912 Signal display
  Display Mode = Scroll
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Clock stimulator => #29
  Interstimulation interval (in sec) = 611
  Stimulation = OVTK_StimulationId_Train
Input stimulations 1=#17.Output Stimulations, Input stimulations 2=#29 -> Stimulation multiplexer => #30
Stimulations=#30, Features for class 1=#27, Features for class 2=#23 -> Classifier trainer
  Train trigger = OVTK_StimulationId_Train
  Filename to save configuration to = C:/Users/roenz/Documents/LuaStimulations/my-classifier-MessingAround-1.xml
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Label_09
  Class 2 label = OVTK_StimulationId_Label_01
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Coef 0 = 0.000000
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Randomize k-fold cross-validation test data = false
  Balance classes = false
-> Player Controller
  Stimulation name = OVTK_StimulationId_Train
  Action to perform = Pause
